PsychoPy2experiment version="2026.2.5"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Experimento scroop
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent textWelcome
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bienvenido

        Presiona la barra espaciadora para comenzar
    KeyboardComponent key_respWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    TextComponent textespacioblanco
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fase_negro
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    TextComponent textfaseNegro
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_respfaseNegro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practica
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    TextComponent textPractica
      color [set every repeat] = $color
      colorSpace = named
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $word
    KeyboardComponent key_respPractica
      allowedKeys [set every repeat] = 'v','a','a','n','r'
      correctAns = $color
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine experimento
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    TextComponent textExperimento
      color [set every repeat] = $color
      colorSpace = named
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $word
    KeyboardComponent key_respExperimento
      allowedKeys [set every repeat] = 'a','n','v','r','m','g','b','c'
      correctAns = $color
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial2
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    TextComponent text_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = A continuación se le mostrará un ejemplo del experimento para que practique
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    KeyboardComponent key_respMensaje
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial3
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    TextComponent text_3
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Experimento.
        Debes decir el color de la tinta, no la palabra escrita
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine blank
  LoopInitiator bucle_inicio loopType="TrialHandler"
    conditionsFile = inicio.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'ardilla'},
      {'word': 'casa'},
      {'word': 'sombrilla'},
      {'word': 'gato'},
      {'word': 'pez'}]
    Routine fase_negro
  LoopTerminator bucle_inicio
  Routine blank
  Routine trial2
  LoopInitiator bucle_practica loopType="TrialHandler"
    conditionsFile = practica.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'incongruent', 'word': 'morado', 'colour': 'green'},
      {'type': 'congruent', 'word': 'amarillo', 'colour': 'yellow'},
      {'type': 'incongruent', 'word': 'rosado', 'colour': 'blue'},
      {'type': 'congruent', 'word': 'café', 'colour': 'brown'},
      {'type': 'incongruent', 'word': 'amarillo', 'colour': 'orange'}]
    Routine practica
  LoopTerminator bucle_practica
  Routine blank
  Routine trial3
  LoopInitiator bucle_experimento loopType="TrialHandler"
    conditionsFile = experimento scroop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'verde', 'color': 'yellow', 'type': 'incongruent'},
      {'word': 'azul', 'color': 'blue', 'type': 'congruent'},
      {'word': 'amarillo', 'color': 'green', 'type': 'incongruent'},
      {'word': 'rosado', 'color': 'pink', 'type': 'congruent'},
      {'word': 'azul', 'color': 'orange', 'type': 'incongruent'},
      {'word': 'rojo', 'color': 'red', 'type': 'congruent'},
      {'word': 'morado', 'color': 'blue', 'type': 'incongruent'},
      {'word': 'amarillo', 'color': 'yellow', 'type': 'congruent'},
      {'word': 'café', 'color': 'orange', 'type': 'incongruent'},
      {'word': 'morado', 'color': 'purple', 'type': 'congruent'},
      {'word': 'negro', 'color': 'gray', 'type': 'incongruent'},
      {'word': 'blanco', 'color': 'white', 'type': 'congruent'},
      {'word': 'rojo', 'color': 'brown', 'type': 'incongruent'},
      {'word': 'azul', 'color': 'blue', 'type': 'congruent'},
      {'word': 'café', 'color': 'pink', 'type': 'incongruent'},
      {'word': 'verde', 'color': 'green', 'type': 'congruent'},
      {'word': 'naranja', 'color': 'red', 'type': 'incongruent'},
      {'word': 'gris', 'color': 'gray', 'type': 'congruent'},
      {'word': 'rosado', 'color': 'red', 'type': 'incongruent'},
      {'word': 'negro', 'color': 'black', 'type': 'congruent'},
      {'word': 'naranja', 'color': 'pink', 'type': 'incongruent'},
      {'word': 'café', 'color': 'brown', 'type': 'congruent'},
      {'word': 'amarillo', 'color': 'green', 'type': 'incongruent'},
      {'word': 'verde', 'color': 'green', 'type': 'congruent'},
      {'word': 'azul', 'color': 'purple', 'type': 'incongruent'},
      {'word': 'naranja', 'color': 'orange', 'type': 'congruent'}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
    Routine experimento
  LoopTerminator bucle_experimento
